OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
Comment
  Use "Temporal Filter" using band pass
  with the low cutoff filter of 12hz and
  high cutoff filter of 30hz for beta waves
Comment
  Use "Channel Selector" to select the
  various channels we're using. For
  example you can use the 1st to
  4th channels
Comment
  OUTPUT TO VCV RACK GOES HERE
Comment
  Simple DSP is used when you
  want  to do some calculation
  with the signal, which lets you
  then normalize it or something

Generic stream reader => #0
  Filename = C:/Users/This Person Computer/AppData/Roaming/OpenVIBE-3.3.1/scenarios/bci-examples/motor-imagery/signals/motor-imagery-1-[2022.10.29-18.51.25].ov
#0.Output Signal -> Signal average
-> Simple DSP => #2
  Equation = (sin(x) +1 )/2 + 30
Data=#2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output Signal -> Channel Selector "23"
  Channel List = 23
  Action = Select
  Channel Matching Method = Smart
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 7001
  OSC Address = /melody
#0.Output Signal -> Channel Selector "22"
  Channel List = 22
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #7
  Equation = (log(-x)-9.01)*200
Data=#7 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 7001
  OSC Address = /brainwaves
#0.Output Signal -> Channel Selector "2:6"
  Channel List = 2:6
  Action = Select
  Channel Matching Method = Smart

Time signal
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Simple DSP
  Equation = (sin(x) +1 )/2 * 120 + 30
-> Signal average => #13
Data=#13 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#13 -> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 7001
  OSC Address = /heartrate

Time signal
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Signal average
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 7001
  OSC Address = /on
